CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only th/Users/felicitaswindhagen/Desktop/20251105_mt_er_Ex_MDCi237Be desired files in your selected folders.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>C[123])-(?P<Date>.*)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Date', 'GECI_mt': 'Date', 'GECI_other': 'Date'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "C2")
    Name to assign these images:GECI_mt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:GECI_other
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:GECI_mt
    Name the output image:Illum_mt
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:GECI_other
    Name the output image:Illum_other
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:400
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:GECI_mt
    Name the output image:BGS_mt
    Select the illumination function:Illum_mt
    Select how the illumination function is applied:Divide
    Select the input image:GECI_other
    Name the output image:BGS_other
    Select the illumination function:Illum_other
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:8|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
    Select the input image:DNA
    Name the output image:RescaleIntensity_DNA
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.3
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:9|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
    Select the input image:BGS_other
    Name the output image:RescaleIntensity_other
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.02
    Intensity range for the output image:0.0,1.0
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
RescaleIntensity:[module_num:10|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
    Select the input image:BGS_mt
    Name the output image:RescaleIntensity_mt
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.03
    Intensity range for the output image:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:RescaleIntensity_DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.005,0.2
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:RescaleIntensity_other
    Name the primary objects to be identified:CellOutline
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:13|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
    Parent objects:Nuclei
    Child objects:CellOutline
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateObjects
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
TrackObjects:[module_num:14|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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,10.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:5
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:BGS_mt, BGS_other
    Select objects to measure:CellOutline

FilterObjects:[module_num:16|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notes:['']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
    Select the objects to filter:CellOutline
    Name the output objects:PositiveCells_mt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_mt
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0045
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:17|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
    Select the objects to filter:CellOutline
    Name the output objects:PositiveCells_other
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_other
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0025
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_mt
    Name the output image:MtOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PositiveCells_mt

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleIntensity_other
    Name the output image:OtherOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:CellOutline

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:MtOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GECI_mt
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellOutlineOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:OtherOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GECI_other
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_CellOutlineOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:32-bit floating point
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CellOutline|Intensity_MeanIntensity_BGS_mt,CellOutline|Intensity_MeanIntensity_BGS_other,CellOutline|Number_Object_Number,CellOutline|Parent_Nuclei,Nuclei|TrackObjects_ParentImageNumber,Nuclei|TrackObjects_DistanceTraveled,Nuclei|TrackObjects_Displacement,Nuclei|TrackObjects_FinalAge,Nuclei|TrackObjects_Lifetime,Nuclei|TrackObjects_Linearity,Nuclei|TrackObjects_Label,Nuclei|TrackObjects_Area,Nuclei|TrackObjects_ParentObjectNumber,Nuclei|Location_Center_Y,Nuclei|Location_Center_Z,Nuclei|Location_Center_X,Nuclei|Number_Object_Number,PositiveCells_other|Location_Center_Z,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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