CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only th/Users/felicitaswindhagen/Desktop/20251105_mt_er_Ex_MDCi237Be desired files in your selected folders.']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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>C[123])-(?P<Date>.*)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Date', 'GECI_mt': 'Date', 'GECI_other': 'Date'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "C2")
    Name to assign these images:GECI_mt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:GECI_other
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:GECI_mt
    Name the output image:Illum_mt
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:GECI_other
    Name the output image:Illum_other
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:400
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:GECI_mt
    Name the output image:BGS_mt
    Select the illumination function:Illum_mt
    Select how the illumination function is applied:Divide
    Select the input image:GECI_other
    Name the output image:BGS_other
    Select the illumination function:Illum_other
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:8|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.3
    Intensity range for the output image:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.005,0.2
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellDisk
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:11|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enabled:False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
    Select the larger identified objects:CellDisk
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoRing
    Shrink smaller object prior to subtraction?:Yes

TrackObjects:[module_num:12|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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,10.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:5
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:1
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:BGS_mt, BGS_other
    Select objects to measure:CellDisk

FilterObjects:[module_num:14|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notes:['']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
    Select the objects to filter:CellDisk
    Name the output objects:PositiveCells_mt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_mt
    Filter using a minimum measurement value?:Yes
    Minimum value:0.01
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:15|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
    Select the objects to filter:CellDisk
    Name the output objects:PositiveCells_other
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_other
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0023
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GECI_mt
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PositiveCells_mt

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GECI_other
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PositiveCells_mt

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:CellDisk|Intensity_MeanIntensity_BGS_mt,CellDisk|Intensity_MeanIntensity_BGS_other,CellDisk|Number_Object_Number,Nuclei|TrackObjects_IntegratedDistance,Nuclei|TrackObjects_Kalman_Vel_COV_X_VX,Nuclei|TrackObjects_Kalman_Vel_COV_X_X,Nuclei|TrackObjects_Kalman_Vel_COV_X_Y,Nuclei|TrackObjects_Kalman_Vel_COV_X_VY,Nuclei|TrackObjects_Kalman_Vel_COV_VX_Y,Nuclei|TrackObjects_Kalman_Vel_COV_VX_X,Nuclei|TrackObjects_Kalman_Vel_COV_VX_VX,Nuclei|TrackObjects_Kalman_Vel_COV_VX_VY,Nuclei|TrackObjects_Kalman_Vel_COV_Y_VX,Nuclei|TrackObjects_Kalman_Vel_COV_Y_X,Nuclei|TrackObjects_Kalman_Vel_COV_Y_Y,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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