CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:No filtering
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Channel>C[123])-(?P<Date>.*)\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Date', 'GECI_mt': 'Date', 'GECI_other': 'Date'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "C1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "C2")
    Name to assign these images:GECI_mt
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:GECI_other
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:GECI_mt
    Name the output image:Illum_mt
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:200
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:GECI_other
    Name the output image:Illum_other
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:400
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:GECI_mt
    Name the output image:BGS_mt
    Select the illumination function:Illum_mt
    Select how the illumination function is applied:Divide
    Select the input image:GECI_other
    Name the output image:BGS_other
    Select the illumination function:Illum_other
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RescaleIntensity:[module_num:8|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.5
    Intensity range for the output image:0.0,1.0
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:RescaleIntensity
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):25,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.005,0.2
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellDisk
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:15
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:CellDisk
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:CytoRing
    Shrink smaller object prior to subtraction?:Yes

TrackObjects:[module_num:12|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enabled:False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
    Choose a tracking method:LAP
    Select the objects to track:Nuclei
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    Select display option:Color and Number
    Save color-coded image?:Yes
    Name the output image:TrackedCells
    Select the movement model:Both
    Number of standard deviations for search radius:3.0
    Search radius limit, in pixel units (Min,Max):2.0,10.0
    Run the second phase of the LAP algorithm?:Yes
    Gap closing cost:40
    Split alternative cost:40
    Merge alternative cost:40
    Maximum gap displacement, in pixel units:5
    Maximum split score:50
    Maximum merge score:50
    Maximum temporal gap, in frames:5
    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:20
    Filter using a maximum lifetime?:No
    Maximum lifetime:100
    Mitosis alternative cost:80
    Maximum mitosis distance, in pixel units:40
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
MeasureObjectIntensity:[module_num:13|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
    Select images to measure:BGS_mt, BGS_other
    Select objects to measure:CellDisk, CytoRing

Threshold:[module_num:14|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
    Select the input image:BGS_mt
    Name the output image:HighPixMask
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0
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    Manual threshold:0.005
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
ConvertObjectsToImage:[module_num:15|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
    Select the input objects:CellDisk
    Name the output image:CellMask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:16|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
    Select the input objects:CytoRing
    Name the output image:CytoRingMask
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:17|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:HighPixInCellMask
    Image or measurement?:Image
    Select the first image:HighPixMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CellMask
    Multiply the second image by:1.0
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
ImageMath:[module_num:18|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:HighPixInCytoRingMask
    Image or measurement?:Image
    Select the first image:HighPixMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CytoRingMask
    Multiply the second image by:1.0
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
MeasureImageAreaOccupied:[module_num:19|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:CellMask, CytoRingMask, HighPixInCellMask, HighPixInCytoRingMask, HighPixMask
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
CalculateMath:[module_num:20|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enabled:False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
    Name the output measurement:FractionCaptured
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_HighPixInCellMask
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_HighPixMask
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:21|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
    Select the objects to filter:CellDisk
    Name the output objects:PositiveCells_mt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_mt
    Filter using a minimum measurement value?:Yes
    Minimum value:0.005
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:CytoRing
    Name the output objects:PositiveCytoRing_mt
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_BGS_mt
    Filter using a minimum measurement value?:Yes
    Minimum value:0.005
    Filter using a maximum measurement value?:No
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:PositiveCells_mt
    Name the output image:PositiveCellMask
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:24|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
    Select the input objects:PositiveCytoRing_mt
    Name the output image:PositiveCytoRingMask
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:25|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PosPixInPosCells
    Image or measurement?:Image
    Select the first image:PositiveCellMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:HighPixMask
    Multiply the second image by:1.0
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
ImageMath:[module_num:26|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:PosPixInPosCytoRing
    Image or measurement?:Image
    Select the first image:PositiveCytoRingMask
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:HighPixMask
    Multiply the second image by:1.0
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
MeasureImageAreaOccupied:[module_num:27|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
    Measure the area occupied by:Binary Image
    Select binary images to measure:PosPixInPosCells, PosPixInPosCytoRing, PositiveCellMask, PositiveCytoRingMask
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
OverlayOutlines:[module_num:28|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GECI_mt
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PositiveCells_mt

ExportToSpreadsheet:[module_num:29|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|AreaOccupied_AreaOccupied_CellMask,Image|AreaOccupied_AreaOccupied_PositiveCellMask,Image|AreaOccupied_AreaOccupied_CytoRingMask,Image|AreaOccupied_AreaOccupied_PositiveCytoRingMask,Image|AreaOccupied_AreaOccupied_HighPixInCellMask,Image|AreaOccupied_AreaOccupied_HighPixInCytoRingMask,Image|AreaOccupied_AreaOccupied_PosPixInPosCells,Image|AreaOccupied_AreaOccupied_HighPixMask,Image|AreaOccupied_AreaOccupied_PosPixInPosCytoRing,Image|Width_GECI_other,Image|Width_GECI_mt,Image|Width_DNA,Image|Height_DNA,Image|Height_GECI_mt,Image|Height_GECI_other
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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